PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SPR
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine Intro
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    TextComponent Intro_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the SPR Template.

        Advance through the sentence using the 'SPACE' key.

        Press 'SPACE' to continue.
    KeyboardComponent Intro_Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Initialization
      Code Type = Auto->JS
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      Begin Experiment:
        r_num = 0
      Begin Routine:
        Region = "r" + str(r_num)
  Routine SPR
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    TextComponent Window_Text
      font = Courier New
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $eval(Region)
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    KeyboardComponent Continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent Increment
      Code Type = Auto->JS
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      End Routine:
        r_num += 1
        Region = "r" + str(r_num)
  Routine CompQ
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    TextComponent Question
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $CompQ
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    KeyboardComponent Response
      allowedKeys = 'y','n'
      correctAns = $CompAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent Reset
      Code Type = Auto->JS
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      Begin Routine:
        r_num = 0
        Region = "r" + str(r_num)
  Routine Exit
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    TextComponent Exit_Text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press 'space' to exit.
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    KeyboardComponent Exit_Key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Intro
  LoopInitiator Item_Loop loopType="TrialHandler"
    conditionsFile = Stimuli.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Item_Num', 1), ('CompQ', 'Question here'), ('CompAns', 'y'), ('Sentence', 'This is the sentence I want to use.'), ('Region_Num', 9), ('r0', '**** ** *** ******** * **** ** ****'), ('r1', 'This ** *** ******** * **** ** ****'), ('r2', '**** is *** ******** * **** ** ****'), ('r3', '**** ** the ******** * **** ** ****'), ('r4', '**** ** *** sentence * **** ** ****'), ('r5', '**** ** *** ******** I **** ** ****'), ('r6', '**** ** *** ******** * want ** ****'), ('r7', '**** ** *** ******** * **** to ****'), ('r8', '**** ** *** ******** * **** ** use.'), ('r9', None)]),
      OrderedDict([('Item_Num', 2), ('CompQ', 'Question here'), ('CompAns', 'n'), ('Sentence', 'This is a second sentence with a different length.'), ('Region_Num', 10), ('r0', '**** ** * ****** ******** **** * ********* *******'), ('r1', 'This ** * ****** ******** **** * ********* *******'), ('r2', '**** is * ****** ******** **** * ********* *******'), ('r3', '**** ** a ****** ******** **** * ********* *******'), ('r4', '**** ** * second ******** **** * ********* *******'), ('r5', '**** ** * ****** sentence **** * ********* *******'), ('r6', '**** ** * ****** ******** with * ********* *******'), ('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
    LoopInitiator SPR_Loop loopType="TrialHandler"
      loopType = sequential
      nReps = Region_Num
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      Routine SPR
    LoopTerminator SPR_Loop
    Routine CompQ
  LoopTerminator Item_Loop
  Routine Exit
